/**
 * Copyright (C) 2017 Laboratory of Experimental Biophysics
 * Ecole Polytechnique Federale de Lausanne.
 *
 * This script demonstrates how to randomly populate the field with
 * with a 3D distribution of fluorophores whose images are computed
 * according to the Gibson-Lanni PSF>
 *
 */

import ch.epfl.leb.sass.simulator.generators.realtime.*;
import ch.epfl.leb.sass.simulator.generators.realtime.psfs.GibsonLanniPSF;
import ch.epfl.leb.sass.simulator.generators.realtime.fluorophores.PalmProperties;
import java.util.ArrayList;

RNG.setSeed(5);

// *** Initalize generator from the ground up ***
Camera camera = new Camera(
		    64, //res_x
                    64, //res_y
                    100, //acq_speed, 
                    1.6, //readout_noise, 
                    0.06, //dark_current, 
                    0.8, //quantum_efficiency, 
                    2.2,  // ADU_per_electron
                    0,    // EM_gain
                    100,  // baseline, ADU 
                    6.45 * 1e-6, //pixel_size, 
                    1.3, //NA, 
                    600 * 1e-9, //wavelength, 
                    60); //magnification)

// fluorophores: all properties in units per frame
FluorophoreProperties fluo = new PalmProperties(
		    2500, // photons per fluorophore
                    0,   // background
                    100,  //ka
                    0,    // kb
                    7.8/1.2/100.0, // kd1
                    0.2*7.8/1.2/100.0, // kd2
                    0.4/100.0, //kr1
                    15.7/100.0); // kr2
// laser
Laser laser = new Laser(0.0, // start
        500.0, // max
        0.0); // min

// Create a Gibson-Lanni point spread function.
int numBasis   = 100;
int numSamples = 1000;
int oversampling = 2;
int sizeX = 1024;
int sizeY = 1024;
double NA = 1.3;
double wavelength    = 0.600;
double ns  = 1.33;
double ng0 = 1.5;
double ng  = 1.5;
double ni0 = 1.5;
double ni  = 1.5;
double ti0 = 150;
double tg0 = 170;
double tg  = 170;
double resLateral = 0.1075;
double resPSF = 0.0215;

// A negative displacement means to move the stage down in an
// inverted microscope.
double stageDisplacement = -2; 
        
GibsonLanniPSF.Builder builder = new GibsonLanniPSF.Builder();
builder.numBasis(numBasis).numSamples(numSamples).sizeX(sizeX)
       .sizeY(sizeY).NA(NA).wavelength(wavelength).ns(ns).ng0(ng0)
       .ng(ng).ni0(ni0).ni(ni).ti0(ti0).tg0(tg0).tg(tg)
       .resLateral(resLateral).oversampling(oversampling)
       .resPSF(resPSF).stageDisplacement(stageDisplacement);
		
GibsonLanniPSF psf = builder.build();

// generate emitters
ArrayList emitters = FluorophoreGenerator.generateFluorophoresGrid3D(
        8, // spacing
	0,  // Lower bound on z (units are pixels)
	4,  // Upper bound on z (units are pixels)
	camera,
	psf,
	fluo);
		
// add a gold bead to the field of view at random location
import ch.epfl.leb.sass.simulator.generators.realtime.obstructors.GoldBeads;
ArrayList obstructors = new ArrayList();
Obstructor beads = new GoldBeads(1, camera, 3000);
obstructors.add(beads);

// assemble the device and generator
Device device = new Device(camera, fluo, laser, emitters, obstructors);
STORMsim generator = new STORMsim(device);

// set laser power
generator.setControlSignal(0.03);

// simulate frames
for (i=0;i<1000;i++) {
    if (i%200==0) {
		System.out.println(i);
	}
	generator.getNextImage();
}

// save and show; uncomment these lines to save and display stack
generator.saveStack(new File("generated_stack.tif"));
//import ij.ImagePlus;
//ImagePlus ip = new ImagePlus("Simulation output", generator.getStack());
//ip.show();
//ip.updateAndRepaintWindow();

//System.exit(0); // uncomment if you want termination immediately



